CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_channel-1.tif")
    Name to assign these images:Channel1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_channel-2.tif")
    Name to assign these images:Channel2
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_channel-3.tif")
    Name to assign these images:Channel3
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_channel-4.tif")
    Name to assign these images:Channel4
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:Channel1
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:200
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    Thresholding method:Otsu

EnhanceOrSuppressFeatures:[module_num:6|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notes:['Use filtering to enhance the foci speckles in the image. The feature size setting should be specified to be at least as large as the largest feature to be enhanced.']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
    Select the input image:Channel2
    Name the output image:EnhancedDots_C2
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast

EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:Channel3
    Name the output image:EnhancedDots_C3
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast

MaskImage:[module_num:8|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notes:['Mask the foci image using the nuclei objects.']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
    Select the input image:EnhancedDots_C2
    Name the output image:MaskedDots_C2
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:9|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
    Select the input image:EnhancedDots_C3
    Name the output image:MaskedDots_C3
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:10|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:MaskedDots_C2
    Name the primary objects to be identified:FinalDots_C2
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.5,0.999
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:MaskedDots_C3
    Name the primary objects to be identified:FinalDots_C3
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.5,0.999
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectIntensity:[module_num:12|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notes:['Measure the intensity of the nuclei against the nuclei image.']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
    Hidden:1
    Select an image to measure:Channel1
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:13|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notes:['Measure the intensity of the foci against the h2ax image.']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
    Hidden:1
    Select an image to measure:Channel2
    Select objects to measure:FinalDots_C2

MeasureObjectIntensity:[module_num:14|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
    Hidden:1
    Select an image to measure:Channel3
    Select objects to measure:FinalDots_C3

RelateObjects:[module_num:15|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notes:['Establish a parent-child between the foci (“children”) and the nuclei (“parents”) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:Nuclei
    Child objects:FinalDots_C2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects1
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
RelateObjects:[module_num:16|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
    Parent objects:Nuclei
    Child objects:FinalDots_C3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects2
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:FinalDots_C2
    Name the output image:C2_Dots_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:18|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
    Select the input objects:FinalDots_C3
    Name the output image:C3_Dots_Image
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:19|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
    Select a color scheme:RGB
    Select the image to be colored red:C3_Dots_Image
    Select the image to be colored green:C2_Dots_Image
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    Name the output image:All_Dots_Image
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:All_Dots_Image
    Name the output image:Result_Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:blue
    Select objects to display:Nuclei

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:Result_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Channel1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Result_Overlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Histology_of_tail_lesions\\DRD1KO\\Cell_profiler_output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:22|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Histology_of_tail_lesions\\DRD1KO\\Cell_profiler_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_Nuclei,Image|Count_FinalDots_C3,Image|Count_FinalDots_C2,Image|Width_Channel1,Image|FileName_Channel3,Image|FileName_Channel2,Image|FileName_Channel1,Image|PathName_Channel3,Image|PathName_Channel2,Image|PathName_Channel1,Image|Height_Channel1,Nuclei|Number_Object_Number,Nuclei|Intensity_MeanIntensity_Channel1,Nuclei|Location_Center_Y,Nuclei|Location_Center_X,Nuclei|Children_FinalDots_C3_Count,Nuclei|Children_FinalDots_C2_Count,Nuclei|Mean_FinalDots_C3_Location_Center_Y,Nuclei|Mean_FinalDots_C3_Location_Center_X,Nuclei|Mean_FinalDots_C3_Intensity_MeanIntensity_Channel3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
