CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_channel-1.tif")
    Name to assign these images:Channel1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_channel-2.tif")
    Name to assign these images:Channel2
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_channel-3.tif")
    Name to assign these images:Channel3
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_channel-4.tif")
    Name to assign these images:Channel4
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "2_cp_masks.tif")
    Name to assign these images:cellpose_spns
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "3_cp_masks.tif")
    Name to assign these images:cellpose_d2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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notes:['Get cellpose SPNs']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
    Select the input image:cellpose_spns
    Name the output object:cellpose_objects_raw
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:6|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
    Select the input image:cellpose_d2
    Name the output object:cellpose_objects_d2
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ExpandOrShrinkObjects:[module_num:7|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notes:['expand spns to remove clumped cells outside striatum']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
    Select the input objects:cellpose_objects_raw
    Name the output objects:expanded_cellpose_objects
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
ConvertObjectsToImage:[module_num:8|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notes:['generate a mask']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
    Select the input objects:expanded_cellpose_objects
    Name the output image:cellpose_chunks
    Select the color format:Binary (black & white)
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
IdentifyPrimaryObjects:[module_num:9|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notes:['remove big objects in this step and the next']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
    Select the input image:cellpose_chunks
    Name the primary objects to be identified:cellpose_chunks_selected
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.0001
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
MaskObjects:[module_num:10|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
    Select objects to be masked:cellpose_objects_raw
    Name the masked objects:cellpose_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:cellpose_chunks_selected
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

ResizeObjects:[module_num:11|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notes:['Adjust width and heigth to your original values.', 'Hacked to avoid dealing with DAPI']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
    Select the input object:cellpose_objects
    Name the output object:Nuclei
    Method:Dimensions
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    Width:756
    Height:756
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
ResizeObjects:[module_num:12|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
    Select the input object:cellpose_objects_d2
    Name the output object:cellpose_objects_d2_resized
    Method:Dimensions
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    Width:756
    Height:756
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
IdentifyPrimaryObjects:[module_num:13|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notes:['Identify the nuclei from the nuclear stain image. ']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enabled:False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
    Select the input image:Channel1
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,0.2
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:14|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notes:['Used to get the surroundings of the cells']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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
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
IdentifyTertiaryObjects:[module_num:15|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notes:['Get the surround of the cells']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
    Select the larger identified objects:ExpandedNuclei
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CellSurround
    Shrink smaller object prior to subtraction?:No

ExpandOrShrinkObjects:[module_num:16|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
    Select the input objects:cellpose_objects_d2_resized
    Name the output objects:cellpose_objects_d2_resized_shrunk
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes

ExpandOrShrinkObjects:[module_num:17|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
    Select the input objects:Nuclei
    Name the output objects:cellpose_objects_resized_shrunk
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes

RelateObjects:[module_num:18|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
    Parent objects:cellpose_objects_resized_shrunk
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:19|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
    Parent objects:cellpose_objects_d2_resized_shrunk
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:20|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notes:['Measure the intensity of the nuclei against the nuclei image.']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
    Select images to measure:Channel2, Channel3, Channel4
    Select objects to measure:Nuclei, CellSurround

MeasureObjectIntensity:[module_num:21|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notes:['Measure the intensity of the foci against the h2ax image.']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enabled:False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
    Select images to measure:Channel3
    Select objects to measure:Nuclei, CellSurround

MeasureObjectIntensity:[module_num:22|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enabled:False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
    Select images to measure:Channel4
    Select objects to measure:Nuclei, CellSurround

GrayToColor:[module_num:23|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enabled:False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
    Select a color scheme:Composite
    Rescale intensity:No
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    Name the output image:dapi_darpp32
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    Hidden:2
    Image name:Channel1
    Color:#B5B6AD
    Weight:0.5
    Image name:Channel2
    Color:#09D913
    Weight:0.5

OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Channel1
    Name the output image:Result_Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#0080FF
    Select objects to display:CellSurround
    Select outline color:green
    Select objects to display:Nuclei
    Select outline color:red
    Select objects to display:cellpose_objects_d2_resized

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:Result_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Channel1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Result_Overlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|data/Microscopy_Data/Plasticity/PH3_inmuno/Processed_data/Cell_profiler_output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:26|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|data/Microscopy_Data/Plasticity/PH3_inmuno/Processed_data/Cell_profiler_output/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|PathName_Channel3,Image|PathName_Channel2,Image|PathName_Channel4,Image|PathName_Channel1,Image|Width_Channel1,Image|Count_Nuclei,Image|FileName_Channel4,Image|FileName_Channel1,Image|FileName_Channel3,Image|FileName_Channel2,Image|Height_Channel1,CellSurround|Intensity_MinIntensity_Channel2,CellSurround|Intensity_MinIntensity_Channel4,CellSurround|Intensity_MinIntensity_Channel3,CellSurround|Intensity_MedianIntensity_Channel3,CellSurround|Intensity_MedianIntensity_Channel2,CellSurround|Intensity_MedianIntensity_Channel4,CellSurround|Intensity_IntegratedIntensity_Channel4,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CellSurround
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
