CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:39
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "rabies.tif")
    Name to assign these images:rabies
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "cFos.tif")
    Name to assign these images:cfos
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "Probabilities_0.tif")
    Name to assign these images:ilastikOutput
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "_GPT_98.5.tif")
    Name to assign these images:GPT_low
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "_GPT_99.5.tif")
    Name to assign these images:GPT_med
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "_GPT_99.9.tif")
    Name to assign these images:GPT_high
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageIntensity:[module_num:5|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
    Select the image to measure:cfos
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureImageIntensity:[module_num:6|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
    Select the image to measure:rabies
    Measure the intensity only from areas enclosed by objects?:No
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
IdentifyPrimaryObjects:[module_num:7|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notes:['The dna channel, e.g. DAPI, is perfect for segmenting individual cells. Given that these cells are well spaced, declumping cells by shape is effective.']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
    Select the input image:ilastikOutput
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):15,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

FilterObjects:[module_num:9|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
    Select the objects to filter:Cells
    Name the output objects:CellsAbove
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:120
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.2
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:CellsAbove
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:Yes
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    Name the output image:rabies_outlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:CellsAbove

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:rabies_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:rabies
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CellProfilerOutput
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:13|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notes:['In addition to colocalization, the intensity of the PH3 probe can be used to classify cells. The intensity can be measured within each nuclei object.']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
    Hidden:1
    Select an image to measure:cfos
    Select objects to measure:CellsAbove

MeasureObjectIntensity:[module_num:14|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
    Hidden:1
    Select an image to measure:rabies
    Select objects to measure:CellsAbove

IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:GPT_low
    Name the primary objects to be identified:IPO_low
    Typical diameter of objects, in pixel units (Min,Max):10,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:16|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
    Select objects to measure:IPO_low
    Calculate the Zernike features?:No

FilterObjects:[module_num:17|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
    Select the objects to filter:IPO_low
    Name the output objects:IPO_low_above
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:IPO_low_above
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:Yes
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    Name the output image:cfos_outlines_low
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:IPO_low_above

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:cfos_outlines_low
    Select method for constructing file names:From image filename
    Select image name for file prefix:cfos
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines_low
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CellProfilerOutput
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskObjects:[module_num:21|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
    Select objects to be masked:IPO_low_above
    Name the masked objects:Masked_low
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellsAbove
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:22|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
    Parent objects:CellsAbove
    Child objects:Masked_low
    Name the output object:RelateObjects_low
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:GPT_med
    Name the primary objects to be identified:IPO_med
    Typical diameter of objects, in pixel units (Min,Max):10,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:24|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
    Select objects to measure:IPO_med
    Calculate the Zernike features?:No

FilterObjects:[module_num:25|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
    Select the objects to filter:IPO_med
    Name the output objects:IPO_med_above
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:26|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
    Select objects to measure:IPO_med_above
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:Yes
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    Name the output image:cfos_outlines_med
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:IPO_med_above

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:cfos_outlines_med
    Select method for constructing file names:From image filename
    Select image name for file prefix:cfos
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines_med
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CellProfilerOutput
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskObjects:[module_num:29|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
    Select objects to be masked:IPO_med_above
    Name the masked objects:Masked_med
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellsAbove
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:30|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
    Parent objects:CellsAbove
    Child objects:Masked_med
    Name the output object:RelateObjects_med
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
IdentifyPrimaryObjects:[module_num:31|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
    Select the input image:GPT_high
    Name the primary objects to be identified:IPO_high
    Typical diameter of objects, in pixel units (Min,Max):10,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:32|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
    Select objects to measure:IPO_high
    Calculate the Zernike features?:No

FilterObjects:[module_num:33|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
    Select the objects to filter:IPO_high
    Name the output objects:IPO_high_above
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:34|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
    Select objects to measure:IPO_high_above
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:35|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
    Display outlines on a blank image?:Yes
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    Name the output image:cfos_outlines_high
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:IPO_high_above

SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:cfos_outlines_high
    Select method for constructing file names:From image filename
    Select image name for file prefix:cfos
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines_high
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CellProfilerOutput
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskObjects:[module_num:37|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
    Select objects to be masked:IPO_high_above
    Name the masked objects:Masked_high
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellsAbove
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:38|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
    Parent objects:CellsAbove
    Child objects:Masked_high
    Name the output object:RelateObjects_high
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ExportToSpreadsheet:[module_num:39|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|CellProfilerOutput
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_CellsAbove,Image|Count_IPO_high,Image|Count_IPO_high_above,Image|Count_IPO_med,Image|Count_IPO_med_above,Image|Count_IPO_low,Image|Count_IPO_low_above,Image|Intensity_MinIntensity_cfos,Image|Intensity_MinIntensity_rabies,Image|Intensity_StdIntensity_cfos,Image|Intensity_StdIntensity_rabies,Image|Intensity_UpperQuartileIntensity_cfos,Image|Intensity_UpperQuartileIntensity_rabies,Image|Intensity_TotalIntensity_cfos,Image|Intensity_TotalIntensity_rabies,Image|Intensity_TotalArea_cfos,Image|Intensity_TotalArea_rabies,Image|Intensity_MADIntensity_cfos,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:CellsAbove
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:IPO_low_above
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:IPO_med_above
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:IPO_high_above
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
